#@ File (label = "Tilescan image file", style = "file") tilescan_image
#@ File (label = "OME-XML file containing x-y positions", style = "extensions:xml") xml_file_path
#@ File (label = "ROIs file", style = "file", style = "extensions:zip") ROIs_file
#@ File (label = "Output directory", style = "directory") output_dir
macro_path = "C:\\Users\\b.vd.broek\\surfdrive\\BB_Macros_sufrdrive\\Tools and subroutines\\get_X_andY_positions_from_OME-XML_file2.ijm";


//xml_file_path = "C:\\Users\\b.vd.broek\\surfdrive\\FALCON Analysis\\07-19-2018\\07-19-2018_baseline.ome-xml.txt";
//output_dir = "C:\\Users\\b.vd.broek\\surfdrive\\SP8 cell positions";

run("Set Measurements...", "area mean standard min centroid integrated stack redirect=None decimal=9");
roiManager("Reset");

open(tilescan_image);
open(ROIs_file);

getDimensions(width, height, channels, slices, frames);
getPixelSize(unit, pixelWidth, pixelHeight);
width = width*pixelWidth*1E-6;		//convert to meters
height = height*pixelHeight*1E-6;
print(width);

Tiles_string = runMacro(macro_path, xml_file_path);
Tiles = split(Tiles_string, "|");	//split string into an array of X,Y Tiles

Tile_pos_X = newArray(Tiles.length);
Tile_pos_Y = newArray(Tiles.length);
for(i=0;i<Tiles.length;i++) {
	Tile_coords=split(Tiles[i],",");	//Split into separate X and Y Tiles
	Tile_pos_X[i] = parseFloat(Tile_coords[0]);	//positions in meters
	Tile_pos_Y[i] = parseFloat(Tile_coords[1]);
}
print(Tile_pos_X.length+" tiles found.");
Plot.create("Positions", "X (m)", "Y (m)");
Plot.setFrameSize(800, 800);
Plot.setLineWidth(1);
Plot.setColor("white");
Plot.add("crosses", Tile_pos_X, Tile_pos_Y);

//Calculate the absolute positions of the selected cells

//Draw tiles as squares
lefts = AddScalarToArray(Tile_pos_X, -width/2);
tops = AddScalarToArray(Tile_pos_Y, -height/2);
rights = AddScalarToArray(Tile_pos_X, width/2);
bottoms = AddScalarToArray(Tile_pos_Y, height/2);
Plot.setColor("lightgray");
Plot.drawShapes("rectangles", lefts, tops, rights, bottoms);

Cell_pos_X = newArray(roiManager("count"));
Cell_pos_Y = newArray(roiManager("count"));
for(i=0;i<roiManager("count");i++) {
	roiManager("select",i);
	List.setMeasurements();
	X = List.getValue("X")*1E-6;
	Y = List.getValue("Y")*1E-6;
	Tile = List.getValue("Slice")-1;
	Cell_pos_X[i] = Tile_pos_X[Tile] - width/2 + X;
	Cell_pos_Y[i] = Tile_pos_Y[Tile] + height/2 - Y;
}
Plot.setLineWidth(2);
Plot.setColor("red");
Plot.add("dots", Cell_pos_X, Cell_pos_Y);
Plot.setFormatFlags("11001100001111");	//Do not draw the grid
Plot.setAxisLabelSize(18, "options");
Plot.show();
//Generate RGN file, to be loaded in the LasX Navigator

preamble = "\<?xml version="1.0"?\>\<NavigatorExperiment\>\<StageOverviewRegions\>\n\<Regions\>\n\<ShapeList\>\n\<Items\>\n";
postamble = "\</Items\>\n\<FillMaskMode\>None\</FillMaskMode\>\n\<VertexUnitMode\>Pixels\</VertexUnitMode\>\n\</ShapeList\>\n\</Regions\>\n\</StageOverviewRegions\>\n\\<Carrier\>\<CarrierSettings\>\<Type\>None\</Type\>\<Name\>\</Name\>\<IsCustomCarrier\>False\</IsCustomCarrier\>\<CustomCarrier\>\<Type\>None\</Type\>\<Name\>\</Name\>\<Round\>True\</Round\>\<Width\>0.075\</Width\>\<Height\>0.025\</Height\>\<NumberColumns\>1\</NumberColumns\>\<NumberRows\>1\</NumberRows\>\<SectorWidth\>0.015\</SectorWidth\>\<SectorHeight\>0.015\</SectorHeight\>\<CenterX\>0\</CenterX\>\<CenterY\>0\</CenterY\>\<SectorDistanceX\>0\</SectorDistanceX\>\<SectorDistanceY\>0\</SectorDistanceY\>\</CustomCarrier\>\</CarrierSettings\>\</Carrier\>\<AcquisitionSetting DeviceMode=\"Confocal\" Sequential=\"false\"\>\<!--Leica Application Suite X (LAS X)--\>\<!--Leica Microsystems CMS GmbH--\>\<!--http://www.confocal-microscopy.com--\>\<!--LAS X 3.5.5.19976--\>\<Configuration SystemType=\"12\" SystemTypeName=\"TCS SP8\" DataSourceType=\"0\" DataSourceTypeName=\"Confocal\" ID=\"1628711457\"\>\<ATLConfocalSettingDefinition VersionNumber=\"15\" UserSettingName=\"S60\" CanDoSTED=\"0\" IsSTEDActive=\"0\" IsSwitchForPulsedStedWithMpActive=\"0\" UseSystemOptimizedVoxelCalculation=\"1\" STEDDelayTimeOffset=\"0\" STEDDelayTimeOffset2=\"0\" StedDelayWavelength=\"470\" IsUserSettingNameSet=\"0\" IsHydPulsedModeCoeffntManualActive=\"0\" XGalvoMovementMode=\"1\" XGalvoMovementModeName=\"linear\" BitSize=\"8\" MaxIntegrationTime=\"0\" ScanMode=\"xyz\" ZUseMode=\"1\" ZUseModeName=\"z-galvo\" ZPosition=\"-2.3841880645312E-10\" IsSuperZ=\"0\" ValidBeginStack=\"0\" ValidEndStack=\"0\" Sections=\"1\" StackCalculationMode=\"2\" StackCalculationModeName=\"System optimized step size\" IsMPFormulaForStepSizerUsageActive=\"0\" IsFastZStack=\"0\" ZStackDirectionMode=\"1\" ZStackDirectionModeName=\"Unidirectional\" CycleCount=\"1\" CycleTime=\"0\" CompleteTime=\"2.643\" LineTime=\"0.02\" FrameTime=\"2.643\" UseMaxIterationsForT=\"0\" IsTimeMinimizeEnabled=\"0\" LastTCalcMode=\"3\" Lines=\"512\" Pages=\"1\" MaxLines=\"1\" StagePosX=\"0.06184224372738\" StagePosY=\"0.03845919417607\" StageRangeX=\"0.12182405383699\" StageRangeY=\"0.082999957504\" FlipX=\"0\" FlipY=\"1\" SwapXY=\"1\" Magnification=\"10\" ObjectivePos=\"3\" CanDoOpticalZoom=\"0\" OpticalZoom=\"1\" ObjectiveName=\"HC PL APO CS    10x/0.40 DRY \" ObjectiveNumber=\"11506285\" MicroscopeModel=\"DMI8-CS\" IsInverseMicroscopeModel=\"1\" Immersion=\"DRY\" NumericalAperture=\"0.4\" RefractionIndex=\"1\" IsFCSFilterAutomationActive=\"0\" IsSMDChaserUVAOTFAutomationActive=\"0\" IsAutofocusOnStart=\"0\" AutofocusRedoEveryNTimePoints=\"0\" CanDoCSMode=\"1\" ActiveCS_SubModeForTLD=\"0\" ActiveCS_SubModeForTLDName=\"Scan-BF\" ActiveCS_SubModeForRLD=\"0\" ActiveCS_SubModeForRLDName=\"Empty\" RldFluoCubePos=\"3\" RldCubeAutoSelectionEnabled=\"1\" LastNonMP_MFP_FW_Name=\"\" LastNonMP_Pol_FW_Name=\"\" ScanSpeed=\"100\" InDimension=\"128\" OutDimension=\"128\" UseScanFormatRestriction=\"0\" Zoom=\"48\" BaseZoom=\"0.75\" PanFirstDim=\"8.67361737988404E-19\" PanSecondDim=\"8.67361737988404E-19\" ScanDirectionX=\"2\" ScanDirectionXName=\"Bidirectional\" PhaseX=\"32.3435163426618\" RotatorAngle=\"0\" Pinhole=\"5.30664206642066E-05\" PinholeAiry=\"0.999932554441429\" EmissionWavelengthForPinholeAiryCalculation=\"580\" FrameAverage=\"4\" LineAverage=\"1\" FrameAccumulation=\"1\" Line_Accumulation=\"1\" AreBleachPointsEnabled=\"0\" InTrigger=\"-1\" OutTrigger=\"-1\" IsRoiScanEnable=\"0\" Is3DLimitedRoiScanEnable=\"0\" Limited3DRoiFirstSection=\"1\" Limited3DRoiLastSection=\"1\" ZCompensationModes=\"0\" ReferencePosition=\"0\" WizardMode=\"0\" IsConstantIntegrationTimeActive=\"1\" PixelDwellTime=\"0.000033425\" SystemSerialNumber=\"8100000891\"\>\<EasySRMappingArray/\>\<EasySRSlider SRRelative=\"75\" ThreeDRelative=\"0\" GentleRelative=\"25\"/\>\<Quantity Value=\"0.00000002\" Unit=\"\"/\>\<AdditionalZPositionList\>\<AdditionalZPosition Valid=\"1\" SuperZMode=\"1\" SuperZModeName=\"RestrictedRange\" ZMode=\"1\" ZUseModeName=\"z-galvo\" ZPosition=\"-2.3841880645312E-10\"/\>\<AdditionalZPosition Valid=\"1\" SuperZMode=\"1\" SuperZModeName=\"RestrictedRange\" ZMode=\"2\" ZUseModeName=\"z-wide\" ZPosition=\"0\"/\>\</AdditionalZPositionList\>\<Autofocus-config VersionNumber=\"1\" Precision=\"2\" FocusRange=\"0.00007\" ZUseMode=\"1\" ZUseModeName=\"z-galvo\" AFAnalyseType=\"1\" AFAnalyseTypeName=\"EveryChannel\" WorkflowTimelapse=\"1\" WorkflowTimelapseName=\"FirstTime\" WorkflowTimelapseIterator=\"1\" WorkflowXY=\"1\" WorkflowXYName=\"FirstPos\" WorkflowXYIterator=\"1\" UseFixSliceNumber=\"0\" AFSubsystem=\"3\" AFSubsystemName=\"CombinedConfocal\" AFCOffset=\"-2\" AFCActive=\"1\" AFCAutonomousOffset=\"-2\" AutoFocusMode=\"2\" AutoFocusModeName=\"FirstChannelOnly\" AutofocusChannel=\"0\" AutofocusChannelName=\"0\" OptimalStepSize=\"2.40952648968455E-06\" PositionDimension=\"122\"/\>\<ShutterList\>\<Shutter Version=\"0\" LightSourceType=\"2\" LightSourceName=\"Chaser UV\" IsActive=\"1\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"20\"/\>\</BeamRoute\>\</Shutter\>\<Shutter Version=\"0\" LightSourceType=\"0\" LightSourceName=\"Visible\" IsActive=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"10\"/\>\<BeamPosition BeamPositionLevel=\"1\" BeamPosition=\"0\"/\>\</BeamRoute\>\</Shutter\>\<Shutter Version=\"0\" LightSourceType=\"4\" LightSourceName=\"SuperContVisible2\" IsActive=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"10\"/\>\<BeamPosition BeamPositionLevel=\"1\" BeamPosition=\"1\"/\>\</BeamRoute\>\</Shutter\>\</ShutterList\>\<BleachPoints\>\<LMSDataContainerHeader Version=\"2\"\>\<Element Name=\"BleachPointROISet\" Visibility=\"2\" CopyOption=\"1\" UniqueID=\"d8b3d428-1e3e-11e9-a5f0-1402ec7d0438\"\>\<Data\>\<ROISet ROISetType=\"1\" PossibleChildROITypes=\"-1\" PossibleROITransforms=\"65535\" PossibleROIActions=\"65535\"/\>\</Data\>\<Memory Size=\"0\" MemoryBlockID=\"MemBlock_2263\"/\>\<Children/\>\</Element\>\</LMSDataContainerHeader\>\</BleachPoints\>\<ATLConfocalBleachPointsSettings/\>\<FilterWheel FluorifierAutoSelection=\"1\" BeamSplitterAutoSelection=\"0\" StedBeamSelectionPinholeCoupling=\"0\" MultiFunctionPortAutoSelection=\"1\" BeamMergerAutoSelectionEnabled=\"0\" RldBlockingFilterAutoSelectionEnabled=\"0\"\>\<Wheel Version=\"0\" Qualifier=\"140\" FilterWheelName=\"External Detection FW\" FilterIndex=\"2\" FilterName=\"Mirror \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"Substrate \"/\>\<WheelName FilterName=\"Mirror \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"26\" FilterWheelName=\"FCS-FW\" FilterIndex=\"0\" FilterName=\"--- \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"CleaningFilter 458\"/\>\<WheelName FilterName=\"CleaningFilter 488\"/\>\<WheelName FilterName=\"CleaningFilter 514\"/\>\<WheelName FilterName=\"CleaningFilter 458/514\"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"160\" FilterWheelName=\"Galvo Slider\" FilterIndex=\"0\" FilterName=\"Galvo X Normal \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"Galvo X Normal \"/\>\<WheelName FilterName=\"Galvo X Res \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"180\" FilterWheelName=\"Multi Function Port\" FilterIndex=\"1\" FilterName=\"Substrate \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"20\"/\>\</BeamRoute\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"Substrate \"/\>\<WheelName FilterName=\"RSP 455\"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"131\" FilterWheelName=\"Notch FW 2\" FilterIndex=\"10\" FilterName=\"SMD1 NF 405/470\" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"Empty\"/\>\<WheelName FilterName=\"NF 445\"/\>\<WheelName FilterName=\"NF 594\"/\>\<WheelName FilterName=\"NF 445/594\"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"--- \"/\>\<WheelName FilterName=\"SMD1 NF 405/470\"/\>\<WheelName FilterName=\"SMD2 NF 405/640\"/\>\<WheelName FilterName=\"SMD3 NF 470/640\"/\>\<WheelName FilterName=\"--- \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"130\" FilterWheelName=\"Polarization FW\" FilterIndex=\"0\" FilterName=\"Empty\" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"79596\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"Empty\"/\>\<WheelName FilterName=\"NF 488\"/\>\<WheelName FilterName=\"NF 514\"/\>\<WheelName FilterName=\"NF 458/514\"/\>\<WheelName FilterName=\"NF 488/561/633\"/\>\<WheelName FilterName=\"--- \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"200\" FilterWheelName=\"Galvo Resonant Pan\" FilterIndex=\"0\" FilterName=\"Galvo X Pan Center \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"Galvo X Pan Center \"/\>\<WheelName FilterName=\"Galvo X Pan Mirror \"/\>\<WheelName FilterName=\"Galvo X Pan Polfilter \"/\>\<WheelName FilterName=\"Galvo X Pan RefDiode \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"121\" FilterWheelName=\"Simple Beam Expander\" FilterIndex=\"0\" FilterName=\"No FRAP Booster \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"No FRAP Booster \"/\>\<WheelName FilterName=\"FRAP Booster \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"170\" FilterWheelName=\"Target Slider\" FilterIndex=\"0\" FilterName=\"Target Park \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"Target Park \"/\>\<WheelName FilterName=\"Target Inserted \"/\>\<WheelName FilterName=\"Target Mirror \"/\>\</Wheel\>\<Wheel Version=\"0\" Qualifier=\"31\" FilterWheelName=\"X2 Lens Changer\" FilterIndex=\"1\" FilterName=\"CS2 UV Optics 2 \" IsSpectrumTurnMode=\"0\" FilterSpectrumPos=\"0\" IndexChanged=\"0\" SpectrumChanged=\"0\"\>\<BeamRoute Version=\"0\"/\>\<WheelName FilterName=\"CS2 UV Optics 1 \"/\>\<WheelName FilterName=\"CS2 UV Optics 2 \"/\>\</Wheel\>\</FilterWheel\>\<Spectro\>\<MultiBand Channel=\"1\" ChannelName=\"Channel 1\" LeftWorld=\"383.260273972602\" RightWorld=\"425.260273972602\" TargetWaveLengthBegin=\"383.260273972602\" TargetWaveLengthEnd=\"425.260273972602\" DyeName=\"\"/\>\<MultiBand Channel=\"2\" ChannelName=\"Channel 2\" LeftWorld=\"492.191780821917\" RightWorld=\"554.808219178082\" TargetWaveLengthBegin=\"492.191780821917\" TargetWaveLengthEnd=\"554.808219178082\" DyeName=\"\"/\>\<MultiBand Channel=\"3\" ChannelName=\"Channel 3\" LeftWorld=\"558.452054794521\" RightWorld=\"563.534246575342\" TargetWaveLengthBegin=\"558.452054794521\" TargetWaveLengthEnd=\"563.534246575342\" DyeName=\"\"/\>\<MultiBand Channel=\"4\" ChannelName=\"Channel 4\" LeftWorld=\"567.178082191781\" RightWorld=\"609.178082191781\" TargetWaveLengthBegin=\"567.178082191781\" TargetWaveLengthEnd=\"609.178082191781\" DyeName=\"\"/\>\<MultiBand Channel=\"5\" ChannelName=\"Channel 5\" LeftWorld=\"737\" RightWorld=\"779\" TargetWaveLengthBegin=\"737\" TargetWaveLengthEnd=\"779\" DyeName=\"\"/\>\</Spectro\>\<AotfList\>\<Aotf Version=\"0\" LightSourceName=\"Chaser UV\" LightSourceType=\"2\" OpenVirtual=\"0\" IsChanged=\"0\" CanDoPulseFreq=\"1\" PulsFreq=\"40000000\" CanDoTwoLaserPIE=\"1\" TwoLaserPIEPossibleLastState=\"0\" TwoLaserPIEActive=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"20\"/\>\</BeamRoute\>\<LaserLineSetting LaserLine=\"405\" IntensityDev=\"1\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"0\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"440\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"1\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"390\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"2\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\</Aotf\>\<Aotf Version=\"0\" LightSourceName=\"Visible\" LightSourceType=\"0\" OpenVirtual=\"0\" IsChanged=\"0\" CanDoPulseFreq=\"0\" PulsFreq=\"0\" CanDoTwoLaserPIE=\"0\" TwoLaserPIEPossibleLastState=\"0\" TwoLaserPIEActive=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"10\"/\>\<BeamPosition BeamPositionLevel=\"1\" BeamPosition=\"0\"/\>\</BeamRoute\>\<LaserLineSetting LaserLine=\"458\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"0\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"476\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"1\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"488\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"2\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"496\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"3\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"514\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"4\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\</Aotf\>\<Aotf Version=\"0\" LightSourceName=\"SuperContVisible2\" LightSourceType=\"4\" OpenVirtual=\"0\" IsChanged=\"0\" ExcitationControlMode=\"0\" ExcitationControlModeBegin=\"0\" ExcitationControlModeEnd=\"0\" CanDoPulseFreq=\"0\" PulsFreq=\"0\" CanDoTwoLaserPIE=\"0\" TwoLaserPIEPossibleLastState=\"0\" TwoLaserPIEActive=\"0\"\>\<BeamRoute Version=\"0\"\>\<BeamPosition BeamPositionLevel=\"0\" BeamPosition=\"10\"/\>\<BeamPosition BeamPositionLevel=\"1\" BeamPosition=\"1\"/\>\</BeamRoute\>\<LaserLineSetting LaserLine=\"488\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"0\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"561\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"1\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"1\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"1\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"472\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"2\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"473\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"3\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"667\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"4\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"668\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"5\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"669\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"6\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\<LaserLineSetting LaserLine=\"670\" IntensityDev=\"0\" IntensityLowDev=\"0\" AOBSIntensityDev=\"-1\" AOBSIntensityLowDev=\"-1\" EnableDoubleMode=\"0\" LineIndex=\"7\" SequenceIndex=\"0\" LineDeactivationFlags=\"0\" IsLineChecked=\"0\" OutCheckedIntensity=\"0\" SuppressionMode=\"-1\" IsVisible=\"0\" CanDoFastModulation=\"1\"/\>\</Aotf\>\</AotfList\>\<LUT_List\>\<LUT Channel=\"1\" LutName=\"Gray\"/\>\<LUT Channel=\"2\" LutName=\"Green\"/\>\<LUT Channel=\"3\" LutName=\"Red\"/\>\<LUT Channel=\"4\" LutName=\"Red\"/\>\<LUT Channel=\"5\" LutName=\"Cyan\"/\>\<LUT Channel=\"100\" LutName=\"Gray\"/\>\<LUT Channel=\"1200\" LutName=\"Red\"/\>\<LUT Channel=\"1201\" LutName=\"Green\"/\>\</LUT_List\>\<DetectorList DetectorAutoSelection=\"1\" InExternalDetectionMode=\"0\"\>\<Detector Name=\"PMT 1\" Type=\"PMT\" ScanType=\"Internal\" Channel=\"1\" ChannelName=\"Channel 1\" IsActive=\"0\" Gain=\"0\" Offset=\"0\" IsSTEDDetector=\"1\" IsSRSDetector=\"0\" DetectionRangeBegin=\"0\" DetectionRangeEnd=\"0\" Phase=\"0\" IsFlimDetector=\"0\" IsHPDDetector=\"0\" CanDoTimeGate=\"0\"/\>\<Detector Name=\"HyD2 SMD 1\" Type=\"HyD\" ScanType=\"Internal\" Channel=\"2\" ChannelName=\"Channel 2\" IsActive=\"1\" Gain=\"10\" Offset=\"-6.6666666666606E-03\" IsSTEDDetector=\"1\" IsSRSDetector=\"0\" DetectionRangeBegin=\"0\" DetectionRangeEnd=\"0\" Phase=\"0\" IsFlimDetector=\"0\" IsHPDDetector=\"1\" IsEnabled=\"1\" IsHPDOverloaded=\"0\" CanDoPhotonCounting=\"1\" AcquisitionMode=\"0\" AcquisitionModeName=\"PhotonIntegration\" CanDoTimeGate=\"1\" IsTimeGateActivated=\"0\" TimeGatePulseStart=\"300\" TimeGateWavelength=\"-1\" TimeGatePulseEnd=\"6000\"/\>\<Detector Name=\"PMT 3\" Type=\"PMT\" ScanType=\"Internal\" Channel=\"3\" ChannelName=\"Channel 3\" IsActive=\"0\" Gain=\"0\" Offset=\"0\" IsSTEDDetecto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lineDyeSeparation\>\<VariableBeamExpanderFactors CommonSettingEnabled=\"0\" CommonFactor=\"1.03\"/\>\</ATLConfocalSettingDefinition\>\</Configuration\>\</AcquisitionSetting\>\</NavigatorExperiment\>";


print("\\Clear");
print(preamble);
for(i=0;i<roiManager("count");i++) {
	start = "\<Item"+i+"\>\n\<Number\>"+i+1+"\</Number\>\n\<Name/\>\n\<Tag\>1Image\</Tag\>\n\<Identifier\>3fce88a0-cffb-41cd-c9ba-13cdc450ca5a\</Identifier\>\n\<Group\>-1\</Group\>\n\<Type\>Point\</Type\>\n\<Visible\>true\</Visible\>\n\<LineThickness\>2\</LineThickness\>\n\<EndBarLength\>20\</EndBarLength\>\n\<Stroke\>R:255,G:255,B:255,A:255\</Stroke\>\n\<Fill\>R:1,G:0,B:0,A:0\</Fill\>\n\<FillMaskMode\>Add\</FillMaskMode\>\n\<Font\>\n\<Family\>Arial\</Family\>\n\<Size\>14\</Size\>\n\<Bold\>false\</Bold\>\n\<Italic\>false\</Italic\>\n\<Strikeout\>false\</Strikeout\>\n\<Underline\>false\</Underline\>\n\</Font\>\n\<LabelText/\>\n\<LabelTextColor\>R:0,G:0,B:0,A:255\</LabelTextColor\>\n\<LabelBackgroundColor\>R:255,G:255,B:176,A:255\</LabelBackgroundColor\>\n\<LabelOffsetX\>0\</LabelOffsetX\>\n\<LabelOffsetY\>0\</LabelOffsetY\>\n\<Angle\>0\</Angle\>\n\<Verticies\>\n\<Items\>\n\<Item0\>\n";
	middle = "\<X\>"+d2s(Cell_pos_X[i],10)+"\</X\>\n\<Y\>"+d2s(-Cell_pos_Y[i],10)+"\</Y\>\n";
	end = "\<Z\>0\</Z\>\n<T>0</T>\n</Item0>\n</Items>\n</Verticies>\n<DecoratorColors>\n<Items />\n</DecoratorColors>\n<ExtendedProperties>\n<Items />\n</ExtendedProperties>\n<TileColor>R:192 ,G: 192,B: 192,A: 64</TileColor>\n<Palette />\n</Item"+i+">\n";
	print(start+middle+end);
}
print(postamble);

selectWindow("Log");
saveAs("text",output_dir+File.separator+"selected_positions.txt");
if(File.exists(output_dir+File.separator+"selected_positions.nes")) File.delete(output_dir+File.separator+"selected_positions.nes");
File.rename(output_dir+File.separator+"selected_positions.txt",output_dir+File.separator+"selected_positions.nes");

print(Cell_pos_X.length+" positions saved in "+output_dir+File.separator+"selected_positions.nes");


//Multiplies all elements of an array with a scalar
function AddScalarToArray(array, scalar) {
	updated_array=newArray(lengthOf(array));
	for (a=0; a<lengthOf(array); a++) {
		updated_array[a]=array[a]+scalar;
	}
	return updated_array;
}
